PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1463, 914]
  expName = PRIYANSHI.AU2220101_DELAY.DISCOUNTING
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_today) + " after" + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/PRIYANSHI/Documents/discounting.xlsx
    loopType = random
    nReps = 14
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    conditions:
      [{'reward_today': 11, 'future_today': 30, 'delay': 7},
      {'reward_today': 15, 'future_today': 35, 'delay': 13},
      {'reward_today': 27, 'future_today': 50, 'delay': 21},
      {'reward_today': 40, 'future_today': 55, 'delay': 62},
      {'reward_today': 49, 'future_today': 60, 'delay': 89},
      {'reward_today': 67, 'future_today': 75, 'delay': 119},
      {'reward_today': 78, 'future_today': 80, 'delay': 162}]
    Routine trial
  LoopTerminator trials
